PsychoPy2experiment version="2024.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'Alter': '', 'Geschlecht': '', 'Haendigkeit': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['fixationskreuz.png', 'conditions_cat_training.xlsx', 'conditions_memo_training.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = SceneCat_2023_2_key_resp
  exportHTML = manually
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine intro
    RoutineSettingsComponent intro
      saveStartStop = False
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    TextComponent intro_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Herzlich Willkommen zum Experiment

        In diesem Experiment untersuchen wir, wie Fotografien von verschiedenen Kategorien von Räumen wahrgenommen und erinnert werden. Es dauert ca. 30 min.
        Bitte begeben Sie sich für die Zeit des Experiments in eine aufrechte Position.

        Zunächst folgt eine Einverständniserklärung, sowie die Datenschutzerklärung.

        Weiter mit der LEERTASTE.
    KeyboardComponent intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent conditions_files_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Conditions Files zuweisen
        participant = expInfo['participant']

        if int(participant) % 2 == 0:
            num_participant = int(int(participant)/2)
            conditions_cat_kitchen_a = "input_files/" + str(num_participant) + "_groupA_scenecat_categorization_kitchens_1.xlsx"
            conditions_cat_kitchen_b = "input_files/" + str(num_participant) + "_groupA_scenecat_categorization_kitchens_2.xlsx"
            conditions_cat_living_a = "input_files/" + str(num_participant) + "_groupA_scenecat_categorization_living_rooms_1.xlsx"
            conditions_cat_living_b = "input_files/" + str(num_participant) + "_groupA_scenecat_categorization_living_rooms_2.xlsx"
            conditions_cat_sleep_a = "input_files/" + str(num_participant) + "_groupA_scenecat_categorization_bedrooms_1.xlsx"
            conditions_cat_sleep_b = "input_files/" + str(num_participant) + "_groupA_scenecat_categorization_bedrooms_2.xlsx"
            conditions_memo_kitchen_a = "input_files/" + str(num_participant) + "_groupA_scenecat_memory_kitchens_1.xlsx"
            conditions_memo_kitchen_b = "input_files/" + str(num_participant) + "_groupA_scenecat_memory_kitchens_2.xlsx"
            conditions_memo_living_a = "input_files/" + str(num_participant) + "_groupA_scenecat_memory_living_rooms_1.xlsx"
            conditions_memo_living_b = "input_files/" + str(num_participant) + "_groupA_scenecat_memory_living_rooms_2.xlsx"
            conditions_memo_sleep_a = "input_files/" + str(num_participant) + "_groupA_scenecat_memory_bedrooms_1.xlsx"
            conditions_memo_sleep_b = "input_files/" + str(num_participant) + "_groupA_scenecat_memory_bedrooms_2.xlsx"
            conditions_block_order = "input_files/" + str(num_participant) + "_groupA_scenecat_block_order.xlsx"
        else:
            num_participant = int((int(participant)  + 1)/2)
            conditions_cat_kitchen_a = "input_files/" + str(num_participant) + "_groupB_scenecat_categorization_kitchens_1.xlsx"
            conditions_cat_kitchen_b = "input_files/" +  str(num_participant) + "_groupB_scenecat_categorization_kitchens_2.xlsx"
            conditions_cat_living_a = "input_files/" +  str(num_participant) + "_groupB_scenecat_categorization_living_rooms_1.xlsx"
            conditions_cat_living_b = "input_files/" +  str(num_participant) + "_groupB_scenecat_categorization_living_rooms_2.xlsx"
            conditions_cat_sleep_a = "input_files/" +  str(num_participant) + "_groupB_scenecat_categorization_bedrooms_1.xlsx"
            conditions_cat_sleep_b = "input_files/" +  str(num_participant) + "_groupB_scenecat_categorization_bedrooms_2.xlsx"
            conditions_memo_kitchen_a = "input_files/" + str(num_participant) + "_groupB_scenecat_memory_kitchens_1.xlsx"
            conditions_memo_kitchen_b = "input_files/" +  str(num_participant) + "_groupB_scenecat_memory_kitchens_2.xlsx"
            conditions_memo_living_a = "input_files/" +  str(num_participant) + "_groupB_scenecat_memory_living_rooms_1.xlsx"
            conditions_memo_living_b = "input_files/" +  str(num_participant) + "_groupB_scenecat_memory_living_rooms_2.xlsx"
            conditions_memo_sleep_a = "input_files/" +  str(num_participant) + "_groupB_scenecat_memory_bedrooms_1.xlsx"
            conditions_memo_sleep_b = "input_files/" +  str(num_participant) + "_groupB_scenecat_memory_bedrooms_2.xlsx"
            conditions_block_order = "input_files/" +  str(num_participant) + "_groupB_scenecat_block_order.xlsx"
  Routine consent
    RoutineSettingsComponent consent
      saveStartStop = False
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    TextComponent consent_text
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 25
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      text:
        Einverständniserklärung
        Vielen Dank für Ihre Teilnahme an unserer Studie zum Bilderverständnis!

        Ihre Teilnahme an dieser Untersuchung ist freiwillig. Es steht Ihnen zu jedem Zeitpunkt dieser Studie frei, Ihre Teilnahme abzubrechen, ohne dass Ihnen daraus Nachteile entstehen.

        Datenschutz: Ihre Angaben sind selbstverständlich vertraulich und werden nur in vollständig anonymisierter Form, d.h. ohne Bezug auf Ihren Namen oder andere persönliche Daten gespeichert und ausgewertet. Weitere Informationen finden Sie in der Datenschutzerklärung.

        Fragen: Falls Sie noch Fragen zu dieser Studie haben sollten, können Sie sich jederzeit an die Studienleiterin  oder an Prof. Niko Busch (niko.busch@uni-muenster) wenden.


        Ich bestätige, dass ich mindestens 18 Jahre alt bin, diese Einverständniserklärung gelesen und verstanden habe und an der Studie teilnehmen möchte. Die Datenschutzerklärung habe ich zur Kenntnis genommen und willige freiwillig in die dort dargestellte Erhebung und weitere Verarbeitung meiner personenbezogenen Daten ein. Ich bin über mein Recht informiert worden, meine Einwilligung jederzeit ohne Angabe von Gründen widerrufen zu können.


        Gleich geht's weiter...
    TextComponent consent_text_2
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 25
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      text:
        Einverständniserklärung
        Vielen Dank für Ihre Teilnahme an unserer Studie zum Bilderverständnis!

        Ihre Teilnahme an dieser Untersuchung ist freiwillig. Es steht Ihnen zu jedem Zeitpunkt dieser Studie frei, Ihre Teilnahme abzubrechen, ohne dass Ihnen daraus Nachteile entstehen.

        Datenschutz: Ihre Angaben sind selbstverständlich vertraulich und werden nur in vollständig anonymisierter Form, d.h. ohne Bezug auf Ihren Namen oder andere persönliche Daten gespeichert und ausgewertet. Weitere Informationen finden Sie in der Datenschutzerklärung.

        Fragen: Falls Sie noch Fragen zu dieser Studie haben sollten, können Sie sich jederzeit an die Studienleiterin  oder an Prof. Niko Busch (niko.busch@uni-muenster) wenden.


        Ich bestätige, dass ich mindestens 18 Jahre alt bin, diese Einverständniserklärung gelesen und verstanden habe und an der Studie teilnehmen möchte. Die Datenschutzerklärung habe ich zur Kenntnis genommen und willige freiwillig in die dort dargestellte Erhebung und weitere Verarbeitung meiner personenbezogenen Daten ein. Ich bin über mein Recht informiert worden, meine Einwilligung jederzeit ohne Angabe von Gründen widerrufen zu können.

        Drücken Sie die LEERTASTE, um die Teilnahme zu bestätigen.
        Drücken Sie ESC, um das Experiment abzubrechen.
    KeyboardComponent consent_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 25
      store = nothing
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    ResourceManagerComponent resources_consent_new
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = ['stimuli/catch_01_stairs.jpg', 'stimuli/catch_01_supermarket.jpg', 'stimuli/catch_02_stairs.jpg', 'stimuli/catch_02_supermarket.jpg', 'stimuli/catch_03_stairs.jpg', 'stimuli/catch_03_supermarket.jpg', 'stimuli/catch_04_stairs.jpg', 'stimuli/catch_04_supermarket.jpg', 'stimuli/catch_05_stairs.jpg', 'stimuli/catch_05_supermarket.jpg', 'stimuli/catch_06_stairs.jpg', 'stimuli/catch_06_supermarket.jpg', 'stimuli/catch_07_stairs.jpg', 'stimuli/catch_07_supermarket.jpg', 'stimuli/catch_08_stairs.jpg', 'stimuli/catch_08_supermarket.jpg', 'stimuli/catch_09_stairs.jpg', 'stimuli/catch_09_supermarket.jpg', 'stimuli/catch_10_stairs.jpg', 'stimuli/catch_10_supermarket.jpg', 'stimuli/catch_11_stairs.jpg', 'stimuli/catch_11_supermarket.jpg', 'stimuli/catch_12_stairs.jpg', 'stimuli/catch_12_supermarket.jpg', 'stimuli/catch_13_stairs.jpg', 'stimuli/catch_13_supermarket.jpg', 'stimuli/catch_14_stairs.jpg', 'stimuli/catch_14_supermarket.jpg', 'stimuli/catch_15_stairs.jpg', 'stimuli/catch_15_supermarket.jpg', 'stimuli/catch_16_stairs.jpg', 'stimuli/catch_16_supermarket.jpg', 'stimuli/catch_17_stairs.jpg', 'stimuli/catch_17_supermarket.jpg', 'stimuli/catch_18_stairs.jpg', 'stimuli/catch_18_supermarket.jpg', 'stimuli/catch_19_stairs.jpg', 'stimuli/catch_19_supermarket.jpg', 'stimuli/catch_20_stairs.jpg', 'stimuli/catch_20_supermarket.jpg', 'stimuli/img_0eflx.png', 'stimuli/img_0j24m.png', 'stimuli/img_0nckg.png', 'stimuli/img_1ao2d.png', 'stimuli/img_1r2ri.png', 'stimuli/img_1vq1v.png', 'stimuli/img_01w8b.png', 'stimuli/img_2js6m.png', 'stimuli/img_2pk6v.png', 'stimuli/img_2pnl2.png', 'stimuli/img_2qhro.png', 'stimuli/img_3bxjb.png', 'stimuli/img_3gm8h.png', 'stimuli/img_3h4c9.png', 'stimuli/img_3sw8t.png', 'stimuli/img_3ze38.png', 'stimuli/img_4o8l0.png', 'stimuli/img_4ufga.png', 'stimuli/img_4wq98.png', 'stimuli/img_05flq.png', 'stimuli/img_5il0t.png', 'stimuli/img_5jp4f.png', 'stimuli/img_5jy9c.png', 'stimuli/img_5mw7y.png', 'stimuli/img_5nlnv.png', 'stimuli/img_5p2ql.png', 'stimuli/img_5tr4v.png', 'stimuli/img_5yhyk.png', 'stimuli/img_6a0hu.png', 'stimuli/img_6ddrx.png', 'stimuli/img_6nbgt.png', 'stimuli/img_6wne4.png', 'stimuli/img_7ed9m.png', 'stimuli/img_7os7q.png', 'stimuli/img_7pgd2.png', 'stimuli/img_7ucnr.png', 'stimuli/img_7w5tw.png', 'stimuli/img_7wul8.png', 'stimuli/img_8dmpq.png', 'stimuli/img_8fpog.png', 'stimuli/img_9bkl9.png', 'stimuli/img_9oofc.png', 'stimuli/img_9pfbj.png', 'stimuli/img_9z99v.png', 'stimuli/img_16kib.png', 'stimuli/img_30vz5.png', 'stimuli/img_37hgm.png', 'stimuli/img_53nbn.png', 'stimuli/img_57os5.png', 'stimuli/img_65cdi.png', 'stimuli/img_68wfw.png', 'stimuli/img_71mhq.png', 'stimuli/img_72fmj.png', 'stimuli/img_73pyk.png', 'stimuli/img_84s7n.png', 'stimuli/img_088sa.png', 'stimuli/img_89rmb.png', 'stimuli/img_91lbx.png', 'stimuli/img_99exx.png', 'stimuli/img_165pk.png', 'stimuli/img_196rk.png', 'stimuli/img_411xa.png', 'stimuli/img_5949k.png', 'stimuli/img_9684y.png', 'stimuli/img_a8wvq.png', 'stimuli/img_a8y4y.png', 'stimuli/img_a9acb.png', 'stimuli/img_a9he3.png', 'stimuli/img_abobq.png', 'stimuli/img_anjr0.png', 'stimuli/img_anzgh.png', 'stimuli/img_aplao.png', 'stimuli/img_as3da.png', 'stimuli/img_aweye.png', 'stimuli/img_b21d7.png', 'stimuli/img_b89t4.png', 'stimuli/img_b971s.png', 'stimuli/img_badai.png', 'stimuli/img_bbs77.png', 'stimuli/img_bdz92.png', 'stimuli/img_bf8nx.png', 'stimuli/img_bg264.png', 'stimuli/img_bj2gr.png', 'stimuli/img_bj99b.png', 'stimuli/img_bklr1.png', 'stimuli/img_bntrh.png', 'stimuli/img_bpyv5.png', 'stimuli/img_bwo9g.png', 'stimuli/img_c0me7.png', 'stimuli/img_c0vzo.png', 'stimuli/img_c2pbs.png', 'stimuli/img_c4uwt.png', 'stimuli/img_c79r7.png', 'stimuli/img_c89x3.png', 'stimuli/img_ca8kd.png', 'stimuli/img_ccn2w.png', 'stimuli/img_ce9vx.png', 'stimuli/img_ce55l.png', 'stimuli/img_cgdyc.png', 'stimuli/img_cmyvx.png', 'stimuli/img_cnyac.png', 'stimuli/img_cogrz.png', 'stimuli/img_cv6mf.png', 'stimuli/img_cv9qj.png', 'stimuli/img_d0k76.png', 'stimuli/img_d3t0o.png', 'stimuli/img_d8xbu.png', 'stimuli/img_dg5h7.png', 'stimuli/img_di6f0.png', 'stimuli/img_dmjh8.png', 'stimuli/img_e26ut.png', 'stimuli/img_eatdk.png', 'stimuli/img_eiu3c.png', 'stimuli/img_ensho.png', 'stimuli/img_es7o2.png', 'stimuli/img_esb4r.png', 'stimuli/img_ewrjk.png', 'stimuli/img_f4jxo.png', 'stimuli/img_faly8.png', 'stimuli/img_fbihy.png', 'stimuli/img_fhm45.png', 'stimuli/img_fnu4h.png', 'stimuli/img_fqgem.png', 'stimuli/img_g2akb.png', 'stimuli/img_g13d5.png', 'stimuli/img_g7870.png', 'stimuli/img_gbypq.png', 'stimuli/img_gka64.png', 'stimuli/img_gqy6z.png', 'stimuli/img_h1yyu.png', 'stimuli/img_h13c3.png', 'stimuli/img_hc49v.png', 'stimuli/img_hfz8w.png', 'stimuli/img_hmmra.png', 'stimuli/img_huisn.png', 'stimuli/img_i2k07.png', 'stimuli/img_i6wsx.png', 'stimuli/img_i7vab.png', 'stimuli/img_ic3os.png', 'stimuli/img_ifebc.png', 'stimuli/img_ikk62.png', 'stimuli/img_il020.png', 'stimuli/img_inqod.png', 'stimuli/img_iudc4.png', 'stimuli/img_iyxnj.png', 'stimuli/img_j4ttn.png', 'stimuli/img_j5rpx.png', 'stimuli/img_j73b6.png', 'stimuli/img_j856a.png', 'stimuli/img_jge7p.png', 'stimuli/img_jivhq.png', 'stimuli/img_jkm86.png', 'stimuli/img_jp28n.png', 'stimuli/img_jpjeg.png', 'stimuli/img_jpldg.png', 'stimuli/img_juob3.png', 'stimuli/img_jz3kd.png', 'stimuli/img_k3abb.png', 'stimuli/img_kljj4.png', 'stimuli/img_kn0we.png', 'stimuli/img_koooi.png', 'stimuli/img_kost0.png', 'stimuli/img_kq9s9.png', 'stimuli/img_kwxq1.png', 'stimuli/img_kzg3h.png', 'stimuli/img_l1h36.png', 'stimuli/img_l9t30.png', 'stimuli/img_le8uf.png', 'stimuli/img_lgxzn.png', 'stimuli/img_lszzj.png', 'stimuli/img_lzz3x.png', 'stimuli/img_mawe6.png', 'stimuli/img_mdh76.png', 'stimuli/img_mgnmm.png', 'stimuli/img_mjxmq.png', 'stimuli/img_mqnl6.png', 'stimuli/img_mucwi.png', 'stimuli/img_nb8p4.png', 'stimuli/img_ncr40.png', 'stimuli/img_njhlh.png', 'stimuli/img_njmgp.png', 'stimuli/img_nyv2b.png', 'stimuli/img_o30wb.png', 'stimuli/img_o37la.png', 'stimuli/img_okvvw.png', 'stimuli/img_oou46.png', 'stimuli/img_ose78.png', 'stimuli/img_oz18d.png', 'stimuli/img_ozxpp.png', 'stimuli/img_p3hpc.png', 'stimuli/img_p659z.png', 'stimuli/img_pbsj1.png', 'stimuli/img_pdzf1.png', 'stimuli/img_pey7u.png', 'stimuli/img_pjfx6.png', 'stimuli/img_psgf7.png', 'stimuli/img_pt3d7.png', 'stimuli/img_q1ynd.png', 'stimuli/img_q9lab.png', 'stimuli/img_qbdgm.png', 'stimuli/img_qbkdt.png', 'stimuli/img_qdln8.png', 'stimuli/img_qgbyn.png', 'stimuli/img_qmand.png', 'stimuli/img_qmgwq.png', 'stimuli/img_qz292.png', 'stimuli/img_r2lxk.png', 'stimuli/img_r10cu.png', 'stimuli/img_ra2nm.png', 'stimuli/img_rg4in.png', 'stimuli/img_ri0yx.png', 'stimuli/img_rru0v.png', 'stimuli/img_rvssl.png', 'stimuli/img_rych7.png', 'stimuli/img_s2zoe.png', 'stimuli/img_s9are.png', 'stimuli/img_scrdm.png', 'stimuli/img_sfh4b.png', 'stimuli/img_sltwe.png', 'stimuli/img_swq34.png', 'stimuli/img_sx68r.png', 'stimuli/img_t1cr9.png', 'stimuli/img_t2ioc.png', 'stimuli/img_t4hvr.png', 'stimuli/img_t90e2.png', 'stimuli/img_tbs4n.png', 'stimuli/img_tn8ys.png', 'stimuli/img_tujn3.png', 'stimuli/img_tv8e2.png', 'stimuli/img_twj5p.png', 'stimuli/img_u2o6z.png', 'stimuli/img_u9f9l.png', 'stimuli/img_ua9bs.png', 'stimuli/img_uspja.png', 'stimuli/img_uttnz.png', 'stimuli/img_uwv6y.png', 'stimuli/img_uxxo0.png', 'stimuli/img_uy1n4.png', 'stimuli/img_v8dra.png', 'stimuli/img_vbrb7.png', 'stimuli/img_vg73h.png', 'stimuli/img_vgaye.png', 'stimuli/img_vgh2g.png', 'stimuli/img_vnxft.png', 'stimuli/img_w8yhd.png', 'stimuli/img_wbws6.png', 'stimuli/img_wgddx.png', 'stimuli/img_wijef.png', 'stimuli/img_wppku.png', 'stimuli/img_wyctg.png', 'stimuli/img_wyl6z.png', 'stimuli/img_wz6x5.png', 'stimuli/img_x0u5z.png', 'stimuli/img_x4bln.png', 'stimuli/img_x9w7o.png', 'stimuli/img_xbtev.png', 'stimuli/img_xdhz2.png', 'stimuli/img_xesl0.png', 'stimuli/img_xr3up.png', 'stimuli/img_xti0z.png', 'stimuli/img_xu1p3.png', 'stimuli/img_xy930.png', 'stimuli/img_xzyzy.png', 'stimuli/img_ye5sl.png', 'stimuli/img_yeh72.png', 'stimuli/img_yteqw.png', 'stimuli/img_z3yzz.png', 'stimuli/img_z4jxm.png', 'stimuli/img_z5osu.png', 'stimuli/img_z293c.png', 'stimuli/img_zgg62.png', 'stimuli/img_zi8qc.png', 'stimuli/img_zi682.png', 'stimuli/img_zt893.png', 'stimuli/img_zv0dq.png', 'stimuli/img_zxvl3.png', 'stimuli/scenecat_stimulus_selection_summary.xlsx', 'stimuli/stimuli_info_140_equi_range_bins.xlsx', 'stimuli/stimuli_info_140.xlsx', 'stimuli/train_1.jpg', 'stimuli/train_2.jpg', 'stimuli/train_3.jpg', 'stimuli/train_4.jpg', 'stimuli/train_5.jpg', 'stimuli/train_6.jpg', 'stimuli/train_7.jpg', 'stimuli/train_8.jpg', 'stimuli/train_9.jpg', 'stimuli/train_10.jpg', 'stimuli/train_11.jpg', 'stimuli/train_12.jpg', 'stimuli/train_13.jpg', 'stimuli/train_14.jpg', 'stimuli/train_15.jpg', 'stimuli/train_16.jpg', 'stimuli/train_17.jpg', 'stimuli/train_18.jpg', 'stimuli/train_19.jpg', 'stimuli/train_20.jpg', 'conditions_block_order', 'conditions_cat_kitchen_b', 'conditions_cat_kitchen_a', 'conditions_cat_living_b', 'conditions_cat_living_a', 'conditions_cat_sleep_b', 'conditions_cat_sleep_a', 'conditions_memo_kitchen_b', 'conditions_memo_kitchen_a', 'conditions_memo_living_b', 'conditions_memo_living_a', 'conditions_memo_sleep_b', 'conditions_memo_sleep_a']
      startVal [time (s)] = 0
  Routine data_3
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  Routine data_safety
    RoutineSettingsComponent data_safety
      saveStartStop = False
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    TextComponent data_safety_text_2
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Datenschutzerklärung
        1. Umfang der Datenerhebung und -verarbeitung: Im Zuge der Studie werden Ihre demographischen Daten (Alter, Geschlecht, Händigkeit) sowie Reaktionszeiten und Korrektheit Ihrer Antworten während des Experiments erhoben. Die im Rahmen dieser Studie erhobenen Daten und persönlichen Mitteilungen werden vertraulich behandelt. Diejenigen Mitarbeiter, die durch direkten Kontakt mit Ihnen über personenbezogene Daten verfügen, unterliegen der Schweigepflicht.  Die Erhebung der Daten erfolgt vollständig anonymisiert, d. h.  an keiner Stelle wird Ihr Name erfragt. Die anonymisierten Daten werden mindestens 10 Jahre gespeichert. Dazu werden Ihre Daten am Ende der Sitzung ohne Angabe Ihres Namens abgespeichert, d.h. in anonymisierter Form. Ab diesem Zeitpunkt können ihre Daten nicht mehr mit ihrer Person in Verbindung gebracht werden, d.h. eine Identifizierung Ihrer Daten ist dann nicht mehr möglich. Deshalb können wir Ihrem Verlangen nach Löschung Ihrer Daten nur so lange nachkommen, bis diese in anonymisierter Form abgespeichert worden sind. Die Ergebnisse und Daten dieser Studie werden als wissenschaftliche Publikation veröffentlicht. Dies geschieht in anonymisierter Form, d.h. ohne dass die Daten einer spezifischen Person zugeordnet werden. Die vollständig anonymisierten Daten dieser Studie werden als offene Daten in einem sicheren, internetbasierten Datenarchiv (z.B. OSF, ZPID, GESIS etc.) zugänglich gemacht. Damit folgt diese Studie den Empfehlungen der Deutschen Forschungsgemeinschaft (DFG) und der Deutschen Gesellschaft für Psychologie (DGPs) zur Qualitätssicherung in der Forschung.
        2. Rechtsgrundlage: Die Rechtsgrundlage zur Verarbeitung der genannten personenbezogenen Daten bildet die Einwilligung gemäß Art. 6 (1) Buchstabe a EU-DSGVO.

        Weiter mit der LEERTASTE.
    KeyboardComponent data_safety_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine data_safety_2
    RoutineSettingsComponent data_safety_2
      saveStartStop = False
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    TextComponent data_safety_2_text_2
      letterHeight = 0.028
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        3. Widerruf: Sie haben das Recht, jederzeit die datenschutzrechtliche Einwilligung zu widerrufen. Durch den Widerruf der Einwilligung wird die Rechtmäßigkeit der aufgrund der Einwilligung bis zum Widerruf erfolgten Verarbeitung nicht berührt. (Widerruf mit Wirkung für die Zukunft). Richten Sie den Widerruf an den Verantwortlichen. Ihnen entstehen durch den Widerruf keine Nachteile.
        4. Namen und Anschrift des Verantwortlichen: Der Verantwortliche im Sinne der EU-Datenschutzgrundverordnung (DSGVO) und anderer nationaler Datenschutzgesetze der Mitgliedsstaaten sowie sonstiger datenschutzrechtlicher Bestimmungen ist die Universität Münster, vertreten durch den Rektor, Prof. Dr. Johannes Wessels, Schlossplatz 2, 48149 Münster, Tel.: + 49 251 83-0, E-Mail: verwaltung@uni-muenster.de. Bei inhaltlichen Rückfragen zum Projekt wenden Sie sich bitte direkt an den fachlichen Ansprechpartner: Prof. Niko Busch, Tel.: + 49 (0) 251 83 34159, E-Mail: niko.busch@uni-muenster.de
        5. Kontaktdaten der Datenschutzbeauftragten: Die Datenschutzbeauftragte der Universität Münster ist:, Nina Meyer-Pachur, Schlossplatz 2, 48149 Münster, Tel.: + 49 251 83-22446, E-Mail: datenschutz@uni-muenster.de
        6. Hinweis auf Rechte der Betroffenen: Gemäß der Datenschutzgrundverordnung haben Sie grundsätzlich das Recht auf: Auskunft (Art 15 DSGVO) , Widerspruch (Art. 21 DSGVO), Datenübertragbarkeit (Art 20 DSGVO), Löschung (Art 17 DSGVO), Einschränkung der Verarbeitung (Art 18 DSGVO), Berichtigung (Art 16 DSGVO). Möchten Sie eines dieser Rechte in Anspruch nehmen, wenden Sie sich bitte an eine der genannten Kontaktpersonen. Weiterhin haben Sie das Recht, Beschwerde bei der Aufsichtsbehörde einzulegen: Landesbeauftragte für Datenschutz und Informationsfreiheit Nordrhein-Westfalen, Helga Block, Kavalleriestraße 2-4, 40213 Düsseldorf, Telefon: 02 11/384 24-0, E-Mail: poststelle@ldi.nrw.de, Homepage: http://www.ldi.nrw.de

        Drücken Sie die LEERTASTE, um zu bestätigen und fortzufahren.
    KeyboardComponent data_safety_2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_cat
    RoutineSettingsComponent instructions_cat
      saveStartStop = False
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    TextComponent instructions_cat_text_2
      letterHeight = 0.026
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        Instruktion

        Das Experiment besteht aus einem Übungsblock und sechs darauf folgenden Blöcken mit jeweils zwei Teilen.

        Zu Beginn jedes Blocks wird Ihnen eine bestimmte Raumkategorie genannt, z.B. Wohnzimmer. Im ersten Teil des Blocks ist es dann Ihre Aufgabe, die gezeigten Bilder zu kategorisieren.
        Hierfür drücken Sie bitte so SCHNELL wie möglich die Taste "f", wenn das Bild NICHT zur genannten Kategorie gehört und die Taste "j", wenn das Bild zur genannten Kategorie gehört.

        Im zweiten Teil des Blocks folgt ein Gedächtnistest, bei dem Ihnen wieder Bilder präsentiert werden. Sie müssen anschließend für jedes Bild angeben, ob es im ersten Teil des Blocks in der Kategorisierungsaufgabe gezeigt wurde und wie sicher Sie sich mit Ihrer Antwort sind.
        Als Antwortmöglichkeiten stehen zur Auswahl: "sicher alt", "eher alt", "eher neu", "sicher neu". Hierbei bedeutet "alt", dass das Bild in der vorherigen Aufgabe gezeigt wurde und "neu", dass das Bild noch nicht gezeigt wurde. Drücken Sie die Taste mit der entsprechenden Option.

        In beiden Teilen wird Ihnen zwischen den Bildern ein Fixationskreuz in der Mitte des Bildschirms präsentiert. Bitte halten Sie während des gesamten Blocks den Blick immer auf diese Position gerichtet.

        Bevor die Aufgabe beginnt, wird es einen Übungsblock durch beide Aufgabenteile geben. In diesem wird Ihnen nach jeder Antwort eingeblendet, ob Sie korrekt oder falsch geantwortet haben. Dies dient dem besseren Verständnis der Aufgabe.
        Platzieren Sie Ihre Finger am besten schon jetzt auf den Tasten "f" und "j".

        Drücken Sie die LEERTASTE, um einen Testlauf zu starten.
    KeyboardComponent instructions_cat_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine category_test_text
    RoutineSettingsComponent category_test_text
      saveStartStop = False
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    TextComponent category_test_word
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
      text = Bahnhof
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  Routine fix_categorization_training
    RoutineSettingsComponent fix_categorization_training
      saveStartStop = False
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    CodeComponent random_isi_code_cat_training
      Code Type = Both
      Begin JS Routine:
        time = 1 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(1,2)
    TextComponent fix_cat_training_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Ist dies ein Bahnhof?
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    TextComponent fix_cat_training_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        nein
    TextComponent fix_cat_training_yes
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        ja
    ImageComponent fix_cat_training_pic
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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  Routine categorization_training
    RoutineSettingsComponent categorization_training
      saveStartStop = False
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    ImageComponent cat_training_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.75
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    ImageComponent cat_training_stim
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    KeyboardComponent cat_training_key
      allowedKeys = 'f','j'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.25
      storeCorrect = True
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    TextComponent cat_training_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ist dies ein Bahnhof?
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    TextComponent cat_training_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        nein
    TextComponent cat_training_yes
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        ja
  Routine cat_training_feedback
    RoutineSettingsComponent cat_training_feedback
      saveStartStop = False
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    CodeComponent cat_train_feedb_code
      Code Type = Auto->JS
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      Begin Routine:
        if cat_training_key.corr == 1:
            cat_training_feedb_eval = "korrekt"
        else:
            cat_training_feedb_eval = "falsch"
    TextComponent cat_train_feedback_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $cat_training_feedb_eval
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    TextComponent cat_train_feedb_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        f

        nein
    TextComponent cat_train_feedb_yes
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
         j

        ja
    TextComponent cat_train_feedb_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Ist dies ein Bahnhof?
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  Routine start_categorization
    RoutineSettingsComponent start_categorization
      saveStartStop = False
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    TextComponent start_cat_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Der Testdurchlauf ist beendet.

        Während der folgenden Aufgabe wird Ihnen keine Rückmeldung mehr eingeblendet, ob Sie korrekt oder falsch geantwortet haben.

        Drücken Sie die LEERTASTE, um das Experiment zu starten.
    KeyboardComponent start_cat_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine middle_break
    RoutineSettingsComponent middle_break
      saveStartStop = False
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    TextComponent break_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Dieser Block des Experimentes ist beendet.

        Drücken Sie die LEERTASTE, um den nächsten Block zu starten.
    KeyboardComponent break_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine instruction_memo
    RoutineSettingsComponent instruction_memo
      saveStartStop = False
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    TextComponent instructions_memo_text
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Jetzt beginnt der Übungsteil für den Gedächtnistest.

        Geben Sie an, ob das gezeigte Bild in der vorherigen Kategorisierungsaufgabe gezeigt wurde und wie sicher Sie sich mit der Antwort sind. Hierbei bedeutet "alt", dass das Bild im ersten Teil gezeigt wurde und "neu", dass das Bild NICHT im ersten Teil gezeigt wurde. Drücken Sie die Taste mit der entsprechenden Option.

        Drücken Sie die LEERTASTE, um einen Testdurchlauf zu starten.
    KeyboardComponent instructions_memo_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine memo_fix_isi
    RoutineSettingsComponent memo_fix_isi
      saveStartStop = False
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    CodeComponent random_isi_code_memo
      Code Type = Both
      Begin JS Routine:
        time = 1 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(1,2)
    ImageComponent memo_fix_pic
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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  Routine memo_training
    RoutineSettingsComponent memo_training
      saveStartStop = False
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    ImageComponent memo_training_fix
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent memo_training_stim
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    SliderComponent memo_training_slider
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ['d \n sicher alt', 'f \n eher alt', 'j \n eher neu', 'k \nsicher neu']
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    KeyboardComponent memo_training_slider_key_resp
      allowedKeys = 'd', 'f', 'j', 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine memo_training_feedback
    RoutineSettingsComponent memo_training_feedback
      saveStartStop = False
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    CodeComponent memo_train_feedb_code
      Code Type = Both
      Begin JS Routine:
        if ((memo_training_slider_key_resp.keys == 'd' || memo_training_slider_key_resp.keys == 'f')) {
            rating = 1;
        }   else {
            rating = 3;
        }

        if (rating == correct_1) {
            memo_train_feedb_eval = 'korrekt';
        } else {
            memo_train_feedb_eval = 'falsch';
        }
      Begin Routine:
        if (memo_training_slider_key_resp.keys == 'd' or memo_training_slider_key_resp.keys == 'f'):
            rating = 1
        else:
            rating = 3

        if rating == correct_1:
            memo_train_feedb_eval = 'korrekt'
        else:
            memo_train_feedb_eval = 'falsch'
    TextComponent memo_train_feedb_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $memo_train_feedb_eval
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  Routine start_memotest
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    TextComponent start_memotest_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Der Testdurchlauf ist beendet.

        Für die folgende Aufgabe wird Ihnen keine Rückmeldung mehr eingeblendet, ob Sie korrekt oder falsch geantwortet haben.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent start_memotest_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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  Routine memotest_task
    RoutineSettingsComponent memotest_task
      saveStartStop = False
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    ImageComponent memotest_task_stim
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    SliderComponent memotest_task_slider
      fillColor = 1.0000, 1.0000, 1.0000
      forceEndRoutine = False
      granularity = 0
      labels = ['d \n sicher alt', 'f \n eher alt', 'j \n eher neu', 'k \nsicher neu']
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      size = (0.8, 0.05)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4)
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    KeyboardComponent memotest_task_slider_key_resp
      allowedKeys = 'd', 'f', 'j', 'k'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = first key
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  Routine end
    RoutineSettingsComponent end
      saveStartStop = False
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    CodeComponent vpcode_code
      Code Type = Both
      Begin JS Routine:
        vpcode = Math.floor(Math.random() * 900000) + 100000;
      Begin Routine:
        import random
        vpcode = random.randint(100000, 999999)
      End JS Routine:
        psychoJS.experiment.addData("vpcode", vpcode);
      End Routine:
        thisExp.addData('vpcode', vpcode)
    TextComponent end_text
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Vielen Dank für Ihre Teilnahme!
        Bitte schicken Sie den unten stehenden Code, an folgende Emailadresse, um die Versuchspersonenstunde zu erhalten:
        p_torw01@uni-muenster.de

        Wo und wie Sie die Unterschrift für Ihre VP-Stunde erhalten, wird Ihnen per Email mitgeteilt.

        Drücken Sie die LEERTASTE, um das Experiment zu beenden.
    KeyboardComponent end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent vp_code_text
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $vpcode
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  Routine kitchen_b
    RoutineSettingsComponent kitchen_b
      saveStartStop = False
      skipIf = kitchen_b_categorization_trials.thisN > 0
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    TextComponent kitchen_b_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Küche
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    TextComponent kitchen_b_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um Block



        von 6 zu starten.
    KeyboardComponent kitchen_b_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent kitchen_b_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total_cat
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  Routine kitchen_b_random_isi
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    ImageComponent random_isi_kitchen_b_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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    CodeComponent random_isi_kitchen_b_code
      Code Type = Both
      Begin JS Routine:
        time = 1 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(1,2)
    TextComponent random_isi_kitchen_b_yes
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        ja
    TextComponent random_isi_kitchen_b_no
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        nein
    TextComponent random_isi_kitchen_b_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Ist dies eine Küche?
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  Routine kitchen_b_picture
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    ImageComponent kitchen_b_fix
      image = fixationskreuz.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent kitchen_b_image
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent kitchen_b_picture_yes
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        ja
    TextComponent kitchen_b_picture_no
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        nein
    TextComponent kitchen_b_picture_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ist dies eine Küche?
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    KeyboardComponent kitchen_b_picture_resp
      allowedKeys [set every repeat] = 'j', 'f'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.35
      storeCorrect = True
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  Routine living_a_random_isi
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  Routine kitchen_random_isi
    RoutineSettingsComponent kitchen_random_isi
      saveStartStop = False
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    ImageComponent random_isi_kitchen_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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    CodeComponent random_isi_kitchen_code
      Code Type = Both
      Begin JS Routine:
        time = 1 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(1,2)
    TextComponent random_isi_kitchen_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        nein
    TextComponent random_isi_kitchen_yes
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        ja
    TextComponent random_isi_kitchen_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Ist dies eine Küche?
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  Routine living_random_isi
    RoutineSettingsComponent living_random_isi
      saveStartStop = False
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    ImageComponent living_random_isi_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    TextComponent living_random_isi_no
      letterHeight = 0.05
      pos = (-0.6 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        nein
    TextComponent living_random_isi_yes
      letterHeight = 0.05
      pos = (0.6 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        ja
    CodeComponent living_random_isi_code
      Code Type = Both
      Begin JS Routine:
        time = 1 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(1,2)
    TextComponent living_random_isi_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Ist dies ein Wohnzimmer?
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  Routine living_picture
    RoutineSettingsComponent living_picture
      saveStartStop = False
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    ImageComponent living_picture_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent living_picture_image
      image [set every repeat] = $stimulus
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent living_picture_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        nein
    TextComponent living_picture_yes
      letterHeight = 0.05
      pos = (0.6 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        ja
    KeyboardComponent living_picture_resp
      allowedKeys [set every repeat] = 'f', 'j'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.35
      storeCorrect = True
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    TextComponent living_picture_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ist dies ein Wohnzimmer?
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  Routine kitchen_picture
    RoutineSettingsComponent kitchen_picture
      saveStartStop = False
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    ImageComponent kitchen_fix
      image = fixationskreuz.png
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent kitchen_image
      image [set every repeat] = $stimulus
      saveStartStop = False
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent kitchen_picture_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        nein
    TextComponent kitchen_picture_yes
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        ja
    TextComponent kitchen_picture_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ist dies eine Küche?
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    KeyboardComponent kitchen_picture_resp
      allowedKeys [set every repeat] = 'j', 'f'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.35
      storeCorrect = True
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  Routine living_b
    RoutineSettingsComponent living_b
      saveStartStop = False
      skipIf = living_b_categorization_trials.thisN > 0
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    TextComponent living_b_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Wohnzimmer
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    TextComponent living_b_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um Block



        von 6 zu starten.
    KeyboardComponent living_b_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent living_b_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total_cat
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  Routine kitchen_a
    RoutineSettingsComponent kitchen_a
      saveStartStop = False
      skipIf = kitchen_a_categorization_trials.thisN > 0
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    TextComponent kitchen_a_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Küche
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    TextComponent kitchen_a_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um Block



        von 6 zu starten.
    KeyboardComponent kitchen_a_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent kitchen_a_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total
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  Routine kitchen_b_2
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    TextComponent kitchen_b_text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Küche
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    TextComponent kitchen_b_text_4
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um den nächsten Block zu starten.
        Es beginnt Block

        Von 6
    KeyboardComponent kitchen_b_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent kitchen_b_block_no_2
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total_cat
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  Routine living_a
    RoutineSettingsComponent living_a
      saveStartStop = False
      skipIf = living_a_categorization_trials.thisN > 0
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    TextComponent living_a_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Wohnzimmer
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    TextComponent living_a_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um Block



        von 6 zu starten.
    KeyboardComponent living_a_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent living_a_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total_cat
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  Routine kitchen_a_memo_instr
    RoutineSettingsComponent kitchen_a_memo_instr
      saveStartStop = False
      skipIf = kitchen_a_memotest.thisN > 0
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    TextComponent kitchen_a_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt startet der Gedächtnistest zur Kategorie Küche.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent kitchen_a_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine kitchen_b_memo_instr
    RoutineSettingsComponent kitchen_b_memo_instr
      saveStartStop = False
      skipIf = kitchen_b_memotest.thisN > 0
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    TextComponent kitchen_b_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt startet der Gedächtnistest zur Kategorie Küche.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent kitchen_b_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine living_a_memotest_instr
    RoutineSettingsComponent living_a_memotest_instr
      saveStartStop = False
      skipIf = living_a_memotest.thisN > 0
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    TextComponent living_a_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt startet der Gedächtnistest zur Kategorie Wohnzimmer.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent living_a_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine living_b_memotest_instr
    RoutineSettingsComponent living_b_memotest_instr
      saveStartStop = False
      skipIf = living_b_memotest.thisN > 0
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    TextComponent living_b_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt startet der Gedächtnistest zur Kategorie Wohnzimmer.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent living_b_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bed_a_memotest_instr
    RoutineSettingsComponent bed_a_memotest_instr
      saveStartStop = False
      skipIf = bed_a_memotest.thisN > 0
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    TextComponent bed_a_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt startet der Gedächtnistest zur Kategorie Schlafzimmer.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent bed_a_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bed_b_memotest_instr
    RoutineSettingsComponent bed_b_memotest_instr
      saveStartStop = False
      skipIf = bed_b_memotest.thisN > 0
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    TextComponent bed_b_memo_instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt startet der Gedächtnistest zur Kategorie Schlafzimmer.

        Drücken Sie die LEERTASTE, um zu starten.
    KeyboardComponent bed_b_memo_instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine bed_a
    RoutineSettingsComponent bed_a
      saveStartStop = False
      skipIf = bed_a_categorization_trials.thisN > 0
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    TextComponent bed_a_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Schlafzimmer
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    TextComponent bed_a_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um Block



        von 6 zu starten.
    KeyboardComponent bed_a_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent bed_a_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total_cat
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  Routine bed_random_isi
    RoutineSettingsComponent bed_random_isi
      saveStartStop = False
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    ImageComponent bed_random_isi_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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    TextComponent bed_random_isi_no
      letterHeight = 0.05
      pos = (-0.6 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
        f

        nein
    TextComponent bed_random_isi_yes
      letterHeight = 0.05
      pos = (0.6 , -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
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      text:
         j

        ja
    CodeComponent bed_random_isi_code
      Code Type = Both
      Begin JS Routine:
        time = 1 + Math.random();
      Begin Routine:
        # Random Zeit ziehen für Fixationskreuzpräsentation
        import random
        time=random.uniform(1,2)
    TextComponent bed_random_isi_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time
      text = Ist dies ein Schlafzimmer?
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  Routine bed_picture
    RoutineSettingsComponent bed_picture
      saveStartStop = False
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    ImageComponent bed_picture_fix
      image = fixationskreuz.png
      saveStartStop = False
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent bed_picture_image
      image [set every repeat] = $stimulus
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent bed_picture_no
      letterHeight = 0.05
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        f

        nein
    TextComponent bed_picture_yes
      letterHeight = 0.05
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
         j

        ja
    KeyboardComponent bed_picture_resp
      allowedKeys [set every repeat] = 'f', 'j'
      correctAns = $correct_answer
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.35
      storeCorrect = True
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    TextComponent bed_picture_question
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ist dies ein Schlafzimmer?
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  Routine bed_b
    RoutineSettingsComponent bed_b
      saveStartStop = False
      skipIf = bed_b_categorization_trials.thisN > 0
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    TextComponent bed_b_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.5
      text = Schlafzimmer
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    TextComponent bed_b_text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
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      text:
        Drücken Sie die LEERTASTE, um Block



        von 6 zu starten.
    KeyboardComponent bed_b_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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    TextComponent bed_b_block_no
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.5
      text [set every repeat] = $block_total
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  Routine instructions_cat_2
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    TextComponent instructions_cat_2_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Jetzt beginnt der Übungsteil für die Kategorisierungsaufgabe.

        Ihnen wird gleich eine Kategorie genannt. Danach werden mehrere Bilder präsentiert. Geben Sie mit den Tasten "f" und "j" für jedes Bild so schnell wie möglich an, ob das Bild zur genannten Kategorie gehört.

        Starten Sie mit der LEERTASTE.
    KeyboardComponent instructions_cat_2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine intro
  Routine consent
  Routine data_safety
  Routine data_safety_2
  Routine instructions_cat
  Routine instructions_cat_2
  Routine category_test_text
  LoopInitiator cat_training_trials loopType="TrialHandler"
    conditionsFile = conditions_cat_training.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': 'stimuli/train_1.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_2.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_3.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_4.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_5.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_6.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_7.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_8.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_9.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_10.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_11.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_12.jpg', 'correct_answer': 'j'},
      {'stimulus': 'stimuli/train_13.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_14.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_15.jpg', 'correct_answer': 'f'},
      {'stimulus': 'stimuli/train_16.jpg', 'correct_answer': 'f'}]
    Routine fix_categorization_training
    Routine categorization_training
    Routine cat_training_feedback
  LoopTerminator cat_training_trials
  Routine instruction_memo
  LoopInitiator memo_training_trials loopType="TrialHandler"
    conditionsFile = conditions_memo_training.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': 'stimuli/train_1.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_2.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_3.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_4.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_5.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_6.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_7.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_8.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_9.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_10.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_11.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_12.jpg', 'correct_1': 1},
      {'stimulus': 'stimuli/train_17.jpg', 'correct_1': 3},
      {'stimulus': 'stimuli/train_18.jpg', 'correct_1': 3},
      {'stimulus': 'stimuli/train_19.jpg', 'correct_1': 3},
      {'stimulus': 'stimuli/train_20.jpg', 'correct_1': 3}]
    Routine memo_fix_isi
    Routine memo_training
    Routine memo_training_feedback
  LoopTerminator memo_training_trials
  Routine start_categorization
  LoopInitiator categorization_trials loopType="TrialHandler"
    conditionsFile = $conditions_block_order
    loopType = sequential
    nReps = 1
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    LoopInitiator kitchen_a_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_kitchen_a
      loopType = sequential
      nReps = kitchens_1
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      Routine kitchen_a
      Routine kitchen_random_isi
      Routine kitchen_picture
    LoopTerminator kitchen_a_categorization_trials
    LoopInitiator kitchen_a_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_kitchen_a
      loopType = sequential
      nReps = kitchens_1
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      Routine kitchen_a_memo_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator kitchen_a_memotest
    LoopInitiator kitchen_b_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_kitchen_b
      loopType = sequential
      nReps = kitchens_2
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      Routine kitchen_b
      Routine kitchen_random_isi
      Routine kitchen_picture
    LoopTerminator kitchen_b_categorization_trials
    LoopInitiator kitchen_b_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_kitchen_b
      loopType = sequential
      nReps = kitchens_2
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      Routine kitchen_b_memo_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator kitchen_b_memotest
    LoopInitiator living_a_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_living_a
      loopType = sequential
      nReps = living_rooms_1
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      Routine living_a
      Routine living_random_isi
      Routine living_picture
    LoopTerminator living_a_categorization_trials
    LoopInitiator living_a_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_living_a
      loopType = sequential
      nReps = living_rooms_1
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      Routine living_a_memotest_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator living_a_memotest
    LoopInitiator living_b_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_living_b
      loopType = sequential
      nReps = living_rooms_2
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      Routine living_b
      Routine living_random_isi
      Routine living_picture
    LoopTerminator living_b_categorization_trials
    LoopInitiator living_b_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_living_b
      loopType = sequential
      nReps = living_rooms_2
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      Routine living_b_memotest_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator living_b_memotest
    LoopInitiator bed_a_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_sleep_a
      loopType = sequential
      nReps = bedrooms_1
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      Routine bed_a
      Routine bed_random_isi
      Routine bed_picture
    LoopTerminator bed_a_categorization_trials
    LoopInitiator bed_a_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_sleep_a
      loopType = random
      nReps = bedrooms_1
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      Routine bed_a_memotest_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator bed_a_memotest
    LoopInitiator bed_b_categorization_trials loopType="TrialHandler"
      conditionsFile = $conditions_cat_sleep_b
      loopType = random
      nReps = bedrooms_2
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      Routine bed_b
      Routine bed_random_isi
      Routine bed_picture
    LoopTerminator bed_b_categorization_trials
    LoopInitiator bed_b_memotest loopType="TrialHandler"
      conditionsFile = $conditions_memo_sleep_b
      loopType = sequential
      nReps = bedrooms_2
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      Routine bed_b_memotest_instr
      Routine memo_fix_isi
      Routine memotest_task
    LoopTerminator bed_b_memotest
    Routine middle_break
  LoopTerminator categorization_trials
  Routine end
